PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = WM_Flanker_Anxiety
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instruction
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, you will see 5 arrows on the screen.
        Your job is to respond to the MIDDLE arrow only.

        Press LEFT arrow key if the middle arrow points left:
        Press RIGHT arrow key if the middle arrow points right: >

        You will also see digits at the top of the screen.
        Remember these digits - you'll need to recall them later!

        Press SPACE to continue.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tiral
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent flanker_arrows
      letterHeight = 0.15
      startVal [time (s)] = 1.0
      text [set every repeat] = $flanker_display
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    KeyboardComponent flanker_response
      allowedKeys = 'left','right'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    CodeComponent log_trial_data
      Code Type = Auto->JS
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      End Routine:
        # Log flanker trial data explicitly for EACH trial
        thisExp.addData('congruency', congruency)
        thisExp.addData('flanker_stimulus', flanker_display)
        thisExp.addData('target_direction', target_direction)
        thisExp.addData('load_level', load_level)
        thisExp.addData('num_digits', num_digits)

        # Force next entry in data file (creates new row)
        thisExp.nextEntry()
  Routine digit_recall
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    TextComponent recall_prompt
      letterHeight = 0.08
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text =  Type the digits you remembered and press ENTER:
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    TextboxComponent recall_input
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent recall_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent check_recall
      Code Type = Auto->JS
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      End Routine:
        # Check if recalled digits match
        recalled_digits = recall_input.text
        if recalled_digits == digits_to_remember:
            digit_recall_correct = 1
        else:
            digit_recall_correct = 0

        # Store for data file
        thisExp.addData('digits_shown', digits_to_remember)
        thisExp.addData('digits_recalled', recalled_digits)
        thisExp.addData('recall_correct', digit_recall_correct)
  Routine ITI
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.50
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  Routine digit_display_routine
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    CodeComponent generate_digits_2
      Code Type = Auto->JS
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      Begin Routine:
        # Generate random digits based on load level
        import random

        # Get num_digits from the conditions file (this fixes the error)
        current_num_digits = int(num_digits)

        if current_num_digits == 1:
            digits_to_remember = str(random.randint(0, 9))
        elif current_num_digits == 3:
            digits_to_remember = ''.join([str(random.randint(0, 9)) for _ in range(3)])
        elif current_num_digits == 5:
            digits_to_remember = ''.join([str(random.randint(0, 9)) for _ in range(5)])

            # Save the digits that were displayed
        thisExp.addData('digits_displayed', digits_to_remember)
    TextComponent digit_display_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $digits_to_remember
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  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for completing the experiment!

           Please inform the experimenter.



        Press SPACE to exit.
Flow
  Routine instruction
  LoopInitiator outer_loop loopType="TrialHandler"
    conditionsFile = outer_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'load_level': 'low', 'num_digits': 1},
      {'load_level': 'low', 'num_digits': 1},
      {'load_level': 'medium', 'num_digits': 3},
      {'load_level': 'medium', 'num_digits': 3},
      {'load_level': 'high', 'num_digits': 5},
      {'load_level': 'high', 'num_digits': 5},
      {'load_level': 'low', 'num_digits': 1},
      {'load_level': 'low', 'num_digits': 1},
      {'load_level': 'medium', 'num_digits': 3},
      {'load_level': 'medium', 'num_digits': 3},
      {'load_level': 'high', 'num_digits': 5},
      {'load_level': 'high', 'num_digits': 5}]
    Routine digit_display_routine
    LoopInitiator flanker_loop loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'congruency': 'congruent', 'flanker_display': '<<<<<', 'target_direction': 'left', 'correct_response': 'left'},
        {'congruency': 'congruent', 'flanker_display': '>>>>>', 'target_direction': 'right', 'correct_response': 'right'},
        {'congruency': 'incongruent', 'flanker_display': '>><>>', 'target_direction': 'left', 'correct_response': 'left'},
        {'congruency': 'incongruent', 'flanker_display': '<<><<', 'target_direction': 'right', 'correct_response': 'right'},
        {'congruency': 'congruent', 'flanker_display': '<<<<<', 'target_direction': 'left', 'correct_response': 'left'},
        {'congruency': 'incongruent', 'flanker_display': '>><>>', 'target_direction': 'left', 'correct_response': 'left'},
        {'congruency': 'congruent', 'flanker_display': '>>>>>', 'target_direction': 'right', 'correct_response': 'right'},
        {'congruency': 'incongruent', 'flanker_display': '<<><<', 'target_direction': 'right', 'correct_response': 'right'},
        {'congruency': 'congruent', 'flanker_display': '>>>>>', 'target_direction': 'right', 'correct_response': 'right'},
        {'congruency': 'congruent', 'flanker_display': '<<<<<', 'target_direction': 'left', 'correct_response': 'left'}]
      Routine tiral
    LoopTerminator flanker_loop
    Routine digit_recall
    Routine ITI
  LoopTerminator outer_loop
  Routine thank_you
