PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instrction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        welcome

        your task is to press 'r' key when the font color is red and 'b' key when the font color is blue
  Routine thank
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you!
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Flow
  Routine instrction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'color': 'red', 'stim_condi': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'color': 'blue', 'stim_condi': 'I', 'correct_res': 'b'},
      {'word': 'BLUE', 'color': 'red', 'stim_condi': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'color': 'blue', 'stim_condi': 'C', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thank
