PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Word priming experiment
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'tshirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'},
      {'study_word': 'board'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'laptop', 'cond': 'prime'},
      {'test_word': '_ha_t', 'Reference': 'chart', 'cond': 'prime'},
      {'test_word': 't_hi_t', 'Reference': 'tshirt', 'cond': 'prime'},
      {'test_word': '_ou_e', 'Reference': 'mouse', 'cond': 'prime'},
      {'test_word': 'p_s_r_', 'Reference': 'pastry', 'cond': 'prime'},
      {'test_word': 'c_s_', 'Reference': 'case', 'cond': 'prime'},
      {'test_word': 'p_li_e', 'Reference': 'police', 'cond': 'prime'},
      {'test_word': 'k_y_', 'Reference': 'keys', 'cond': 'prime'},
      {'test_word': 'p_st_r', 'Reference': 'poster', 'cond': 'prime'},
      {'test_word': 'b_ar_', 'Reference': 'board', 'cond': 'prime'},
      {'test_word': '_a_bl_', 'Reference': 'marble', 'cond': 'non-prime'},
      {'test_word': '_ho_e', 'Reference': 'phone', 'cond': 'non-prime'},
      {'test_word': '_oo_', 'Reference': 'book', 'cond': 'non-prime'},
      {'test_word': 'c_s_io_', 'Reference': 'cushion', 'cond': 'non-prime'},
      {'test_word': 'ta_l_', 'Reference': 'table', 'cond': 'non-prime'},
      {'test_word': 'p_nc_l', 'Reference': 'pencil', 'cond': 'non-prime'},
      {'test_word': 'v_s_', 'Reference': 'vase', 'cond': 'non-prime'},
      {'test_word': 'bo_t_e', 'Reference': 'bottle', 'cond': 'non-prime'},
      {'test_word': 'c_m_ra', 'Reference': 'camera', 'cond': 'non-prime'},
      {'test_word': 'k_t_', 'Reference': 'kite', 'cond': 'non-prime'}]
    Routine test
  LoopTerminator trials_2
